CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:421
GitHash:
ModuleCount:13
HasImagePlaneDetails:False

LoadData:[module_num:1|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
    Input data file location:Default Input Folder sub-folder|Documents\\spheroid_docker\\stella\\input\\STELLA_sA800_fullyauto_Merge_100-20_C01_D7\\cellprofiler
    Name of the file:load_input.csv
    Load images based on this data?:Yes
    Base image location:Default Input Folder|
    Process just a range of rows?:No
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    Group images by metadata?:No
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    Rescale intensities?:Yes

RescaleIntensity:[module_num:2|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
    Select the input image:original
    Name the output image:orignal_rescale
    Rescaling method:Stretch each image to use the full intensity range
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
ColorToGray:[module_num:3|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
    Select the input image:orignal_rescale
    Conversion method:Combine
    Image type:RGB
    Name the output image:original_gray
    Relative weight of the red channel:1.0
    Relative weight of the green channel:1.0
    Relative weight of the blue channel:1.0
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
IdentifyPrimaryObjects:[module_num:4|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
    Select the input image:probabilities
    Name the primary objects to be identified:spheroids
    Typical diameter of objects, in pixel units (Min,Max):10,100000
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.3
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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
MeasureObjectSizeShape:[module_num:5|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
    Select object sets to measure:spheroids
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

FilterObjects:[module_num:6|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
    Select the objects to filter:spheroids
    Name the output objects:spheroids_filtered
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:3
    Additional object count:0
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    Keep removed objects as a seperate set?:No
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    Select the measurement to filter by:AreaShape_Compactness
    Filter using a minimum measurement value?:No
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    Filter using a maximum measurement value?:Yes
    Maximum value:2
    Select the measurement to filter by:AreaShape_Eccentricity
    Filter using a minimum measurement value?:No
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    Filter using a maximum measurement value?:Yes
    Maximum value:0.8
    Select the measurement to filter by:AreaShape_Area
    Filter using a minimum measurement value?:Yes
    Minimum value:100
    Filter using a maximum measurement value?:No
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
MeasureObjectSizeShape:[module_num:7|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
    Select object sets to measure:spheroids_filtered
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

MeasureTexture:[module_num:8|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
    Select images to measure:original_gray
    Select objects to measure:spheroids_filtered
    Enter how many gray levels to measure the texture at:256
    Hidden:1
    Measure whole images or objects?:Objects
    Texture scale to measure:3

MeasureObjectIntensityDistribution:[module_num:9|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
    Select images to measure:original_gray
    Hidden:1
    Hidden:1
    Hidden:0
    Calculate intensity Zernikes?:None
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    Select objects to measure:spheroids_filtered
    Object to use as center?:These objects
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    Scale the bins?:Yes
    Number of bins:4
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
MeasureObjectIntensity:[module_num:10|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
    Select images to measure:original_gray
    Select objects to measure:spheroids_filtered

OverlayObjects:[module_num:11|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
    Input:orignal_rescale
    Name the output image:object_image
    Objects:spheroids_filtered
    Opacity:0.9

SaveImages:[module_num:12|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
    Select the type of image to save:Image
    Select the image to save:object_image
    Select method for constructing file names:From image filename
    Select image name for file prefix:original
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_cp_output
    Saved file format:tiff
    Output file location:Default Output Folder|Documents\\spheroid_docker\\stella\\input\\STELLA_sA800_fullyauto_Merge_100-20_C01_D7\\cellprofile
    Image bit depth:32-bit floating point
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

ExportToSpreadsheet:[module_num:13|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:Yes
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:Yes
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:Yes
    Output file location:Default Output Folder|Documents\\spheroid_docker\\stella\\input\\STELLA_sA800_fullyautoMerge_100-20_C01_D7\\cellprofile
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements:spheroids|AreaShape_BoundingBoxArea,spheroids|AreaShape_MinFeretDiameter,spheroids|AreaShape_MaxFeretDiameter,spheroids|AreaShape_MedianRadius,spheroids|AreaShape_Center_X,spheroids|AreaShape_Center_Y,spheroids|AreaShape_MinorAxisLength,spheroids|AreaShape_Compactness,spheroids|AreaShape_BoundingBoxMaximum_X,spheroids|AreaShape_BoundingBoxMaximum_Y,spheroids|AreaShape_MajorAxisLength,spheroids|AreaShape_FormFactor,spheroids|AreaShape_BoundingBoxMinimum_X,spheroids|AreaShape_BoundingBoxMinimum_Y,spheroids|AreaShape_EquivalentDiameter,spheroids|AreaShape_EulerNumber,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:cp_output_
    Overwrite existing files without warning?:Yes
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